PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'session': '001', 'participant': '', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Hariri_Task
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent debug
      Code Type = Auto->JS
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      Begin Routine:
        # printing for debugging
        print(f'left stimuli is {stimuli_left}')
        print(f'right stimuli is {stimuli_right}')
        print(f'target is {target}')
    ImageComponent left_stimuli
      image [set every repeat] = $stimuli_left
      pos = (-0.3, 0.2)
      size = (0.3,0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      units = height
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    ImageComponent right_stimuli
      image [set every repeat] = $stimuli_right
      pos = (0.3, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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    ImageComponent target_stim
      image [set every repeat] = $target
      pos = (0, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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    CodeComponent number_of_trials
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      Begin Routine:
        # code component so each loop has only 6 trials. 'shapes.xlsx'
        # condition file has 12 unique trials overall and we only want to display
        # every loop.
        myCount = myCount + 1
        print(f'number of trial is {myCount}')
        if myCount > 5:
            trials.finished = True
            myCount = 0
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      storeCorrect = True
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  Routine readyMessage
    CodeComponent debugging_condition
      Code Type = Auto->JS
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      Begin Routine:
        # print to know which condition is used
        print( f'condition is {condsFile}')
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $readyMSG
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  Routine ISI
    CodeComponent debug_isi
      Code Type = Auto->JS
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      Begin Routine:
        # printing for debugging
        print(f'jitter is {jitter}')
    PolygonComponent fix_cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlocks"+expInfo['group']+".xlsx" 
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine ISI
  LoopTerminator blocks
